PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280,720]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image = /Users/neurastation_0/Downloads/999867.jpg
      size = (1280, 720)
      startVal [time (s)] = 0.0
      units = pix
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    DotsComponent dots
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent polygon
      anchor = bottom-left
      fillColor = white
      pos = (-0.3, -0.3)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      anchor = top-right
      fillColor = black
      lineColor = black
      pos = (0.3, 0.3)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        from feagi_agent import retina as retina
        from feagi_agent import feagi_interface as FEAGI
        from configuration import *
        from datetime import datetime
      Begin Experiment:
        # Generate runtime dictionary
        previous_data_frame = dict()
        runtime_data = {"cortical_data": {}, "current_burst_id": None, "stimulation_period": None, "feagi_state": None,
                        "feagi_network": None}

        # FEAGI section start
        print("Connecting to FEAGI resources...")

        # address = 'tcp://' + network_settings['feagi_host'] + ':' + network_settings['feagi_outbound_port']

        feagi_host, api_port = FEAGI.feagi_setting_for_registration()
        api_address = FEAGI.feagi_gui_address(feagi_host, api_port)

        stimulation_period_endpoint = FEAGI.feagi_api_burst_engine()
        burst_counter_endpoint = FEAGI.feagi_api_burst_counter()

        runtime_data["feagi_state"] = FEAGI.feagi_registration(feagi_host=feagi_host, api_port=api_port)

        print("** **", runtime_data["feagi_state"])
        network_settings['feagi_burst_speed'] = float(runtime_data["feagi_state"]['burst_duration'])

        # todo: to obtain this info directly from FEAGI as part of registration
        ipu_channel_address = FEAGI.feagi_inbound(runtime_data["feagi_state"]['feagi_inbound_port_gazebo'])
        print("IPU_channel_address=", ipu_channel_address)
        opu_channel_address = FEAGI.feagi_outbound(network_settings['feagi_host'],
                                                   runtime_data["feagi_state"]['feagi_outbound_port'])

        feagi_ipu_channel = FEAGI.pub_initializer(ipu_channel_address)
        feagi_opu_channel = FEAGI.sub_initializer(opu_address=opu_channel_address)
        # FEAGI section ends
        previous_frame_data = dict()
        msg_counter = runtime_data["feagi_state"]['burst_counter']

        redTheta = 0
        blueTheta = 0
        X = 0
        Y = 0
        flag = False
        rgb = dict()
        rgb['camera'] = dict()
      Each Frame:
        message_from_feagi = feagi_opu_channel.receive()
        # Do the drawing
        pixels = np.array(win._getFrame())
        pixels = retina.pan(pixels, capabilities['camera']["camera_pose"], capabilities['camera']["field_of_vision_origin"], capabilities['camera'][
                                      "field_of_vision_x"], capabilities['camera'][
                                      "field_of_vision_y"])
        retina_data = retina.frame_split(pixels, capabilities['camera']['retina_width_percent'],
                                             capabilities['camera']['retina_height_percent'])
        for i in retina_data:
            if 'C' in i:
                    retina_data[i] = retina.center_data_compression(retina_data[i],
                                                                    capabilities['camera']["central_vision_compression"]
                                                                    )
            else:
                retina_data[i] = retina.center_data_compression(retina_data[i],
                                                                capabilities['camera']
                                                                ['peripheral_vision_compression'])
        opu_data = FEAGI.opu_processor(message_from_feagi)
        if previous_data_frame == {}:
            for i in retina_data:
                previous_name = str(i) + "_prev"
                previous_data_frame[previous_name] = {}
        for i in retina_data:
            name = i
            if 'prev' not in i:
                data = retina.ndarray_to_list(retina_data[i])
                if 'C' in i:
                    previous_name = str(i) + "_prev"
                    rgb_data, previous_data_frame[previous_name] = retina.get_rgb(data,
                                                                                  capabilities['camera'][
                                                                                      'central_vision_compression'],
                                                                                  previous_data_frame[previous_name],
                                                                                  name,
                                                                                  capabilities[
                                                                                      'camera']['deviation_threshold'])
                else:
                    previous_name = str(i) + "_prev"
                    rgb_data, previous_data_frame[previous_name] = retina.get_rgb(data,
                                                                                  capabilities['camera'][
                                                                                      'peripheral_vision_compression'],
                                                                                  previous_data_frame[previous_name],
                                                                                  name,
                                                                                  capabilities[
                                                                                      'camera']['deviation_threshold'])
                for a in rgb_data['camera']:
                    rgb['camera'][a] = rgb_data['camera'][a]
        try:
            if "data" not in message_to_feagi:
                message_to_feagi["data"] = dict()
            if "sensory_data" not in message_to_feagi["data"]:
                message_to_feagi["data"]["sensory_data"] = dict()
            message_to_feagi["data"]["sensory_data"]['camera'] = rgb['camera']
        except Exception as e:
            print(e)
        if opu_data is not None:
            if 'motor' in opu_data:
                if opu_data['motor']:
                    for i in opu_data['motor']:
                        if i // 2 == 0:
                            if i % 2 == 0:
                                X += opu_data['motor'][i] / 100
                            else:
                                X -= opu_data['motor'][i] / 100
                        if i // 2 == 1:
                            if i % 2 == 0:
                                Y += opu_data['motor'][i] / 100
                            else:
                                Y -= opu_data['motor'][i] / 100
            if opu_data['misc']:
                for i in opu_data['misc']:
                    if i == 0:
                        mouse1 = 1
                    if i == 1:
                        mouse2 = 1
                    if i == 2:
                        mouse3 = 1
            if 'oculomotor' in opu_data:
                for i in opu_data['oculomotor']:
                    if i == 0:
                        capabilities['camera']['field_of_vision_origin'][0] = \
                            capabilities['camera']['field_of_vision_origin'][0] - opu_data['oculomotor'][i]
                        capabilities['camera']['camera_pose'][0] = \
                            capabilities['camera']['camera_pose'][0] - opu_data['oculomotor'][i]
                    if i == 1:
                        capabilities['camera']['field_of_vision_origin'][0] = \
                            capabilities['camera']['field_of_vision_origin'][0] + opu_data['oculomotor'][i]
                        capabilities['camera']['camera_pose'][0] = \
                            capabilities['camera']['camera_pose'][0] + opu_data['oculomotor'][i]
                    if i == 2:
                        capabilities['camera']['field_of_vision_origin'][1] = \
                            capabilities['camera']['field_of_vision_origin'][1] - opu_data['oculomotor'][i]
                        capabilities['camera']['camera_pose'][1] = \
                            capabilities['camera']['camera_pose'][1] - opu_data['oculomotor'][i]
                    if i == 3:
                        capabilities['camera']['field_of_vision_origin'][1] = \
                            capabilities['camera']['field_of_vision_origin'][1] + opu_data['oculomotor'][i]
                        capabilities['camera']['camera_pose'][1] = \
                            capabilities['camera']['camera_pose'][1] + opu_data['oculomotor'][i]
            message_to_feagi['timestamp'] = datetime.now()
            message_to_feagi['counter'] = msg_counter
            feagi_ipu_channel.send(message_to_feagi)
            message_to_feagi.clear()
            for i in rgb['camera']:
                rgb['camera'][i].clear()
    PolygonComponent polygon_3
      pos [set every frame] = (-1*capabilities['camera']['camera_pose'][0], capabilities['camera']['camera_pose'][1])
      shape = rectangle
      size = (capabilities['camera']['field_of_vision_origin'][0], capabilities['camera']['field_of_vision_origin'][1])
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent polygon_4
      fillColor = white
      pos = (500, 0)
      shape = star
      size = (200, 200)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent polygon_5
      fillColor = white
      pos = (-500, 0)
      shape = cross
      size = (200, 200)
      startVal [time (s)] = 0.0
      units = pix
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Flow
  Routine trial
